CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does endwith ".tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Sample>.*)_(?P<Channel>.*)_00(?P<Time>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern for each stain: ‘Channel 1’ for protein, ‘Channel 2’ for the nuclei image. Also, exactly match the text for the illumination correction function file names. ', '', '—', 'So that you can match each well’s images to the single set of illumination correction functions, rather than matching the image set by “Order” we’ve matched it by “Metadata”, which allows us to instruct CellProfiler that each well will have its own set of OrigDNA and OrigProtein images but that they’ll all use the illumination correction function found in the same folder.', '', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "nucleus")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Green")
    Name to assign these images:KTR_Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cellmask")
    Name to assign these images:Cellbody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cyan")
    Name to assign these images:KTR_Cyan
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image (background corrected H2A in the red channel)']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
    Select the input image:Nucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.005
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify the cells by using the nuclei as a “seed” region, then growing outwards until stopped by the image threshold or by a neighbor. The Distance-B method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Cellbody
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Identify the cytoplasm by “subtracting” the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:8|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the corrected images.']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
    Hidden:2
    Select an image to measure:KTR_Green
    Select an image to measure:KTR_Cyan
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

TrackObjects:[module_num:10|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
    Choose a tracking method:Overlap
    Select the objects to track:Nuclei
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    Maximum pixel distance to consider matches:3
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNuclei
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:9
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
TrackObjects:[module_num:11|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
    Choose a tracking method:Overlap
    Select the objects to track:Cytoplasm
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    Maximum pixel distance to consider matches:3
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:9
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
CalculateMath:[module_num:12|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
    Name the output measurement:RatioCyan
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_KTR_Cyan
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_KTR_Cyan
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:13|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
    Name the output measurement:RatioGreen
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_KTR_Green
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_KTR_Green
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
Tile:[module_num:14|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enabled:False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
    Select an input image:TrackedCytoplasm
    Name the output image:TiledImage_TrackedCyto
    Tile assembly method:Across cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:ERK_BG
    Select an additional image to tile:H2A_BG

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:TrackedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tracked
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/TEST_CP
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/TEST_CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
